{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {}
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {}
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20181105", 
        "description": "MR/PIQT for Philips Intera 1.5T receive/transmit=Head/B", 
        "specfiles": "S : acsr11v8l1_03_l01_nt.spec C : none", 
        "version": "20181105"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {}
        }, 
        "qc_series": {
            "params": {}
        }
    }
}